// This CellML file was generated on 24/01/2017 at 12:48:23 using:
//
// COR (0.9.31.1409)
// Copyright 2002-2017 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// creator: Family Fabbri; Given Alan; Orgname University of Bologna; Orgunit Biomedical Engineering Laboratory - DEI
// created: W3CDTF 2017
// title: Computational analysis of the human sinus node action potential: model development and effects of mutations.
// reference: subject_type keyword; cardiac electrophysiology; pacemaker activity; human Sinoatrial node; electrophysiology
// reference: Family Fabbri; Given A; Family Fantini; Given M; Family Wilders; Given R; Family Severi; Given S; title Computational analysis of the human sinus node action potential: model development and effects of mutations.; title The Journal of Physiology; volume 595; first_page 2365; last_page 2396
def model Human_SAN_Fabbri_Fantini_Wilders_Severi_2017 as
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit per_minute as
    unit second {expo: -1, mult: 60};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millivolt_second as
    unit millivolt;
    unit second;
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit per_nanomolar as
    unit nanomolar {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_second as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_minute as
    unit millimolar {expo: -1};
    unit second {expo: -1, mult: 60};
  enddef;
  def unit nanoA_per_millimolar as
    unit nanoA;
    unit millimolar {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit millimetre as
    unit metre {pref: milli};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit millimetre3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit litre_millimetre3 as
    unit litre;
    unit millimetre3 {expo: -1};
  enddef;
  def unit micrometre_per_femtometre as
    unit micrometre;
    unit metre {expo: -1, pref: femto};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp Membrane as
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    var C: microF {init: 5.7e-5};
    var RTONF: millivolt {pub: out};
    var time: second {priv: out, pub: in};
    var i_f: nanoA {priv: out, pub: in};
    var i_NaK: nanoA {priv: out, pub: in};
    var i_NaCa: nanoA {priv: out, pub: in};
    var i_Na: nanoA {priv: out, pub: in};
    var i_Kr: nanoA {priv: out, pub: in};
    var i_Ks: nanoA {priv: out, pub: in};
    var i_to: nanoA {priv: out, pub: in};
    var i_CaL: nanoA {priv: out, pub: in};
    var i_CaT: nanoA {priv: out, pub: in};
    var i_KACh: nanoA {priv: out, pub: in};
    var i_Kur: nanoA {priv: out, pub: in};
    var V: millivolt {pub: out};
    var clamp_mode: dimensionless {init: 0};
    var V_clamp: millivolt {priv: in};
    var V_ode: millivolt {init: -47.787168};
    var i_tot: nanoA;
    i_tot = i_f+i_Kr+i_Ks+i_to+i_NaK+i_NaCa+i_Na+i_CaL+i_CaT+i_KACh+i_Kur;
    ode(V_ode, time) = -i_tot/C;
    RTONF = R*T/F;
    V = sel
      case clamp_mode >= 1{dimensionless}:
        V_clamp;
      otherwise:
        V_ode;
    endsel;
  enddef;

  def comp Voltage_clamp as
    var t_holding: second {init: 0.5};
    var t_test: second {init: 0.5};
    var V_clamp: millivolt {pub: out};
    var V_test: millivolt {init: -35};
    var V_holding: millivolt {init: -45};
    var time: second {pub: in};
    V_clamp = sel
      case (time > t_holding) and (time < t_holding+t_test):
        V_test;
      otherwise:
        V_holding;
    endsel;
  enddef;

  def comp Rate_modulation_experiments as
    var ACh: nanomolar {init: 0, pub: out};
    var Iso_1_uM: dimensionless {init: 0, pub: out};
    var ANS: dimensionless {init: 0, pub: out};
    var Iso_cas: nanomolar {init: 0, pub: out};
    var ACh_cas: nanomolar {init: 0, pub: out};
  enddef;

  def comp Ionic_values as
    var Nai: millimolar {pub: in};
    var Nao: millimolar {init: 140, pub: out};
    var Ki: millimolar {init: 140, pub: out};
    var Ko: millimolar {init: 5.4, pub: out};
    var Ca_sub: millimolar {pub: in};
    var Cao: millimolar {init: 1.8, pub: out};
    var RTONF: millivolt {pub: in};
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    E_Na = RTONF*ln(Nao/Nai);
    E_K = RTONF*ln(Ko/Ki);
    E_Ca = 0.5{dimensionless}*RTONF*ln(Cao/Ca_sub);
  enddef;

  def comp Nai_concentration as
    var Nai: millimolar {pub: out};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var V_sub: millimetre3 {pub: in};
    var V_i: millimetre3 {pub: in};
    var i_Na: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_fNa: nanoA {pub: in};
    var i_siNa: nanoA {pub: in};
    var Nai_: millimolar {init: 5};
    var Nai_clamp: dimensionless {init: 1};
    ode(Nai_, time) = (1{dimensionless}-Nai_clamp)*(-1{mA_nA})*(i_Na+i_fNa+i_siNa+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(1{litre_millimetre3}*(V_i+V_sub)*F);
    Nai = Nai_;
  enddef;

  def comp i_f as
    var ACh: nanomolar {priv: out, pub: in};
    var Iso_1_uM: dimensionless {priv: out, pub: in};
    var ANS: dimensionless {priv: out, pub: in};
    var cAMP: millimolar {priv: out, pub: in};
    var i_f: nanoA {pub: out};
    var i_fNa: nanoA {pub: out};
    var E_Na: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var i_fK: nanoA {pub: out};
    var g_f: microS {init: 0.00427};
    var G_f: microS;
    var g_f_Na: microS {pub: out};
    var G_f_Na: microS;
    var g_f_K: microS {pub: out};
    var G_f_K: microS;
    var Km_f: millimolar {init: 45};
    var alpha: dimensionless {init: 0.5927};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var y: dimensionless {priv: in};
    var blockade: dimensionless {init: 0};
    G_f = g_f/(Ko/(Ko+Km_f));
    G_f_K = G_f/(alpha+1{dimensionless});
    G_f_Na = alpha*G_f_K;
    g_f_Na = G_f_Na*Ko/(Ko+Km_f);
    g_f_K = G_f_K*Ko/(Ko+Km_f);
    i_fNa = y*g_f_Na*(V-E_Na)*(1{dimensionless}-blockade);
    i_fK = y*g_f_K*(V-E_K)*(1{dimensionless}-blockade);
    i_f = i_fNa+i_fK;
  enddef;

  def comp i_f_y_gate as
    var y: dimensionless {init: 0.009508, pub: out};
    var tau_y: second;
    var y_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var ACh_shift: millivolt;
    var ACh: nanomolar {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var Iso_shift: millivolt;
    var y_shift: millivolt {init: 0};
    var ANS: dimensionless {pub: in};
    var ANS_shift_i_f_y_gate: millivolt;
    var cAMP: millimolar {pub: in};
    var Ki_f: millivolt {init: 26.26};
    var ni_f: dimensionless {init: 9.281};
    var K_05i_f: dimensionless {init: 0.02979017};
    ACh_shift = sel
      case ACh > 0{nanomolar}:
        -1{millivolt}-9.898{millivolt}*pow(1e-6{per_nanomolar}*ACh, 0.618{dimensionless})/(pow(1e-6{per_nanomolar}*ACh, 0.618{dimensionless})+0.00122423{dimensionless});
      otherwise:
        0{millivolt};
    endsel;
    Iso_shift = sel
      case Iso_1_uM > 0{dimensionless}:
        7.5{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    ANS_shift_i_f_y_gate = sel
      case ANS > 0{dimensionless}:
        Ki_f*pow(cAMP, ni_f)/(pow(K_05i_f, ni_f)+pow(cAMP, ni_f))-18.76{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    tau_y = 1{dimensionless}/(0.36{per_millivolt_second}*(V+148.8{millivolt}-ACh_shift-Iso_shift-ANS_shift_i_f_y_gate)/(exp(0.066{per_millivolt}*(V+148.8{millivolt}-ACh_shift-Iso_shift-ANS_shift_i_f_y_gate))-1{dimensionless})+0.1{per_millivolt_second}*(V+87.3{millivolt}-ACh_shift-Iso_shift-ANS_shift_i_f_y_gate)/(1{dimensionless}-exp(-0.2{per_millivolt}*(V+87.3{millivolt}-ACh_shift-Iso_shift-ANS_shift_i_f_y_gate))))-0.054{second};
    y_infinity = sel
      case V < -(80{millivolt}-ACh_shift-Iso_shift-y_shift):
        0.01329{dimensionless}+0.99921{dimensionless}/(1{dimensionless}+exp((V+97.134{millivolt}-ACh_shift-Iso_shift-ANS_shift_i_f_y_gate-y_shift)/8.1752{millivolt}));
      otherwise:
        0.0002501{dimensionless}*exp(-(V-ACh_shift-Iso_shift-ANS_shift_i_f_y_gate-y_shift)/12.861{millivolt});
    endsel;
    ode(y, time) = (y_infinity-y)/tau_y;
  enddef;

  def comp i_NaK as
    var i_NaK: nanoA {pub: out};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Km_Kp: millimolar {init: 1.4};
    var Km_Nap: millimolar {init: 14};
    var i_NaK_max: nanoA {init: 0.08105};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var Iso_increase: dimensionless;
    var Iso_1_uM: dimensionless {priv: out, pub: in};
    var ANS: dimensionless {priv: out, pub: in};
    var ANS_cond_i_NaK: dimensionless;
    var PKA: dimensionless {pub: in};
    var K_i_NaK: dimensionless {init: 0.435692};
    var K_05i_NaK: dimensionless {init: 0.719701};
    Iso_increase = sel
      case Iso_1_uM > 0{dimensionless}:
        1.2{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    ANS_cond_i_NaK = sel
      case ANS > 0{dimensionless}:
        -0.2152{dimensionless}+K_i_NaK*pow(PKA, 10.0808{dimensionless})/(pow(K_05i_NaK, 10.0808{dimensionless})+pow(PKA, 10.0808{dimensionless}));
      otherwise:
        0{millivolt};
    endsel;
    i_NaK = Iso_increase*(1{dimensionless}+ANS_cond_i_NaK)*i_NaK_max*pow(1{dimensionless}+pow(Km_Kp/Ko, 1.2{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+pow(Km_Nap/Nai, 1.3{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+exp(-(V-E_Na+110{millivolt})/20{millivolt}), -1{dimensionless});
  enddef;

  def comp i_NaCa as
    var i_NaCa: nanoA {pub: out};
    var K_NaCa: nanoA {init: 3.343};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var k41: dimensionless;
    var k34: dimensionless;
    var k23: dimensionless;
    var k21: dimensionless;
    var k32: dimensionless;
    var k43: dimensionless;
    var k12: dimensionless;
    var k14: dimensionless;
    var Qci: dimensionless {init: 0.1369};
    var Qn: dimensionless {init: 0.4315};
    var Qco: dimensionless {init: 0};
    var K3ni: millimolar {init: 26.44};
    var Kci: millimolar {init: 0.0207};
    var K1ni: millimolar {init: 395.3};
    var K2ni: millimolar {init: 2.289};
    var Kcni: millimolar {init: 26.44};
    var K3no: millimolar {init: 4.663};
    var K1no: millimolar {init: 1628};
    var K2no: millimolar {init: 561.4};
    var Kco: millimolar {init: 3.663};
    var do: dimensionless;
    var di: dimensionless;
    var Cao: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var RTONF: millivolt {pub: in};
    var blockade_NaCa: dimensionless {init: 0};
    i_NaCa = (1{dimensionless}-blockade_NaCa)*K_NaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k43 = Nai/(K3ni+Nai);
    k12 = Ca_sub/Kci*exp(-Qci*V/RTONF)/di;
    k14 = Nai/K1ni*Nai/K2ni*(1{dimensionless}+Nai/K3ni)*exp(Qn*V/(2{dimensionless}*RTONF))/di;
    k41 = exp(-Qn*V/(2{dimensionless}*RTONF));
    di = 1{dimensionless}+Ca_sub/Kci*(1{dimensionless}+exp(-Qci*V/RTONF)+Nai/Kcni)+Nai/K1ni*(1{dimensionless}+Nai/K2ni*(1{dimensionless}+Nai/K3ni));
    k34 = Nao/(K3no+Nao);
    k21 = Cao/Kco*exp(Qco*V/RTONF)/do;
    k23 = Nao/K1no*Nao/K2no*(1{dimensionless}+Nao/K3no)*exp(-Qn*V/(2{dimensionless}*RTONF))/do;
    k32 = exp(Qn*V/(2{dimensionless}*RTONF));
    do = 1{dimensionless}+Cao/Kco*(1{dimensionless}+exp(Qco*V/RTONF))+Nao/K1no*(1{dimensionless}+Nao/K2no*(1{dimensionless}+Nao/K3no));
  enddef;

  def comp i_Na as
    var i_Na_: nanoA {pub: out};
    var i_Na_L: nanoA {pub: out};
    var i_Na: nanoA {pub: out};
    var g_Na: microS {init: 0.0223};
    var g_Na_L: microS {init: 0};
    var E_mh: millivolt;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_mh = RTONF*ln((Nao+0.12{dimensionless}*Ko)/(Nai+0.12{dimensionless}*Ki));
    i_Na_ = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
    i_Na_L = g_Na_L*pow(m, 3{dimensionless})*(V-E_mh);
    i_Na = i_Na_+i_Na_L;
  enddef;

  def comp i_Na_m_gate as
    var m: dimensionless {init: 0.447724, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var m_infinity: dimensionless;
    var tau_m: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+42.0504{millivolt})/8.3106{millivolt}));
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    tau_m = 1{dimensionless}/(alpha_m+beta_m);
    ode(m, time) = (m_infinity-m)/tau_m;
  enddef;

  def comp i_Na_h_gate as
    var h: dimensionless {init: 0.003058, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var h_infinity: dimensionless;
    var tau_h: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+69.804{millivolt})/4.4565{millivolt}));
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}))+1{dimensionless});
    tau_h = 1{dimensionless}/(alpha_h+beta_h);
    ode(h, time) = (h_infinity-h)/tau_h;
  enddef;

  def comp i_CaL as
    var i_CaL: nanoA {pub: out};
    var i_siCa: nanoA {pub: out};
    var i_siK: nanoA {pub: out};
    var i_siNa: nanoA {pub: out};
    var ACh_block: dimensionless;
    var ACh: nanomolar {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var P_CaL: nanoA_per_millimolar {init: 0.4578};
    var RTONF: millivolt {pub: in};
    var Nao: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Cao: millimolar {pub: in};
    var Ca_sub: millimolar {priv: out, pub: in};
    var dL: dimensionless {priv: in};
    var fL: dimensionless {priv: in};
    var fCa: dimensionless {priv: in};
    var Iso_increase: dimensionless;
    var Iso_1_uM: dimensionless {priv: out, pub: in};
    var ANS: dimensionless {priv: out, pub: in};
    var ANS_cond_i_CaL: dimensionless;
    var PKA: dimensionless {priv: out, pub: in};
    var K_i_CaL1: dimensionless {init: 0.470657};
    var K_05i_CaL1: dimensionless {init: 0.730287};
    Iso_increase = sel
      case Iso_1_uM > 0{dimensionless}:
        1.23{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    ANS_cond_i_CaL = sel
      case ANS > 0{dimensionless}:
        -0.2152{dimensionless}+K_i_CaL1*pow(PKA, 10.0808{dimensionless})/(pow(K_05i_CaL1, 10.0808{dimensionless})+pow(PKA, 10.0808{dimensionless}));
      otherwise:
        0{dimensionless};
    endsel;
    i_siCa = 2{dimensionless}*P_CaL*(1{dimensionless}-ACh_block)*1{dimensionless}*Iso_increase*(1{dimensionless}+ANS_cond_i_CaL)*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siK = 0.000365{dimensionless}*(1{dimensionless}-ACh_block)*1{dimensionless}*Iso_increase*(1{dimensionless}+ANS_cond_i_CaL)*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Ki-Ko*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siNa = 0.0000185{dimensionless}*P_CaL*(1{dimensionless}-ACh_block)*1{dimensionless}*Iso_increase*(1{dimensionless}+ANS_cond_i_CaL)*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Nai-Nao*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    ACh_block = 0.31{dimensionless}*1e-6{dimensionless}*ACh/(ACh+0.00009{nanomolar});
    i_CaL = i_siCa+i_siK+i_siNa;
  enddef;

  def comp i_CaL_dL_gate as
    var dL: dimensionless {init: 0.001921, pub: out};
    var dL_infinity: dimensionless;
    var tau_dL: second;
    var alpha_dL: per_second;
    var beta_dL: per_second;
    var adVm: millivolt;
    var bdVm: millivolt;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var ANS: dimensionless {pub: in};
    var k_dL: millivolt {init: 4.3371};
    var V_dL: millivolt {init: -16.4508};
    var Iso_shift_dL: millivolt;
    var Iso_slope_dL: dimensionless;
    var ANS_shift_i_CaL_dL_gate: millivolt;
    var PKA: dimensionless {pub: in};
    var K_i_CaL2: millivolt {init: 27.526226};
    var K_05i_CaL2: dimensionless {init: 0.661450};
    Iso_shift_dL = sel
      case Iso_1_uM > 0{dimensionless}:
        -8{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    ANS_shift_i_CaL_dL_gate = sel
      case ANS > 0{dimensionless}:
        -(K_i_CaL2*pow(PKA, 9.281{dimensionless})/(pow(K_05i_CaL2, 9.281{dimensionless})+pow(PKA, 9.281{dimensionless}))-18.76{millivolt});
      otherwise:
        0{millivolt};
    endsel;
    Iso_slope_dL = sel
      case Iso_1_uM > 0{dimensionless}:
        -27{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    dL_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-V_dL-Iso_shift_dL-ANS_shift_i_CaL_dL_gate)/(k_dL*(1{dimensionless}+Iso_slope_dL/100{dimensionless}))));
    tau_dL = 0.001{dimensionless}/(alpha_dL+beta_dL);
    alpha_dL = -0.02839{per_millivolt_second}*(adVm+41.8{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate)/(exp(-(adVm+41.8{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate)/2.5{millivolt})-1{dimensionless})-0.0849{per_millivolt_second}*(adVm+6.8{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate)/(exp(-(adVm+6.8{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate)/4.8{millivolt})-1{dimensionless});
    adVm = sel
      case V == -41.8{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate:
        -41.80001{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate;
      case V == 0{millivolt}:
        0{millivolt};
      case V == -6.8{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate:
        -6.80001{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate;
      otherwise:
        V;
    endsel;
    beta_dL = 0.01143{per_millivolt_second}*(bdVm+1.8{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate)/(exp((bdVm+1.8{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate)/2.5{millivolt})-1{dimensionless});
    bdVm = sel
      case V == -1.8{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate:
        -1.80001{millivolt}-Iso_shift_dL-ANS_shift_i_CaL_dL_gate;
      otherwise:
        V;
    endsel;
    ode(dL, time) = (dL_infinity-dL)/tau_dL;
  enddef;

  def comp i_CaL_fL_gate as
    var fL: dimensionless {init: 0.846702, pub: out};
    var fL_infinity: dimensionless;
    var tau_fL: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var shift_fL: millivolt {init: 0};
    var k_fL: millivolt {init: 0};
    fL_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+37.4{millivolt}+shift_fL)/(5.3{millivolt}+k_fL)));
    tau_fL = 0.001{dimensionless}*(44.3{second}+230{second}*exp(-sqr((V+36{millivolt})/10{millivolt})));
    ode(fL, time) = (fL_infinity-fL)/tau_fL;
  enddef;

  def comp i_CaL_fCa_gate as
    var fCa: dimensionless {init: 0.844449, pub: out};
    var alpha_fCa: per_second {init: 0.0075};
    var fCa_infinity: dimensionless;
    var tau_fCa: second;
    var Km_fCa: millimolar {init: 0.000338};
    var V: millivolt {pub: in};
    var Ca_sub: millimolar {pub: in};
    var time: second {pub: in};
    fCa_infinity = Km_fCa/(Km_fCa+Ca_sub);
    tau_fCa = 0.001{dimensionless}*fCa_infinity/alpha_fCa;
    ode(fCa, time) = (fCa_infinity-fCa)/tau_fCa;
  enddef;

  def comp i_CaT as
    var i_CaT: nanoA {pub: out};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var P_CaT: nanoA_per_millimolar {init: 0.04132};
    var RTONF: millivolt {pub: in};
    var Cao: millimolar {pub: in};
    var Ca_sub: millimolar {priv: out, pub: in};
    var dT: dimensionless {priv: in};
    var fT: dimensionless {priv: in};
    i_CaT = 2{dimensionless}*P_CaT*V/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*V*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*V/RTONF))*dT*fT;
  enddef;

  def comp i_CaT_dT_gate as
    var dT: dimensionless {init: 0.268909, pub: out};
    var dT_infinity: dimensionless;
    var tau_dT: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    dT_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+38.3{millivolt})/5.5{millivolt}));
    tau_dT = 0.001{second}/(1.068{dimensionless}*exp((V+38.3{millivolt})/30{millivolt})+1.068{dimensionless}*exp(-(V+38.3{millivolt})/30{millivolt}));
    ode(dT, time) = (dT_infinity-dT)/tau_dT;
  enddef;

  def comp i_CaT_fT_gate as
    var fT: dimensionless {init: 0.020484, pub: out};
    var fT_infinity: dimensionless;
    var tau_fT: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var offset_fT: second {init: 0};
    fT_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+58.7{millivolt})/3.8{millivolt}));
    tau_fT = 1{second}/(16.67{dimensionless}*exp(-(V+75{millivolt})/83.3{millivolt})+16.67{dimensionless}*exp((V+75{millivolt})/15.38{millivolt}))+offset_fT;
    ode(fT, time) = (fT_infinity-fT)/tau_fT;
  enddef;

  def comp Ca_SR_release as
    var j_SRCarel: millimolar_per_second {pub: out};
    var R: dimensionless {init: 0.9308};
    var O: dimensionless {init: 6.181512e-9};
    var I: dimensionless {init: 4.595622e-10};
    var RI: dimensionless {init: 0.069199};
    var ks: per_second {init: 148041085.1};
    var MaxSR: dimensionless {init: 15};
    var MinSR: dimensionless {init: 1};
    var EC50_SR: millimolar {init: 0.45};
    var HSR: dimensionless {init: 2.5};
    var koSRCa: per_millimolar2_second;
    var kiSRCa: per_millimolar_second;
    var koCa_max: per_millimolar2_second {init: 10000};
    var koCa: per_millimolar2_second;
    var kiCa: per_millimolar_second {init: 500};
    var kCaSR: dimensionless;
    var kim: per_second {init: 5};
    var kom: per_second {init: 660};
    var time: second {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    var diff: millimolar;
    var P_tot: dimensionless;
    var ANS: dimensionless {priv: out, pub: in};
    var PKA: dimensionless {pub: in};
    var RyR_min: dimensionless {init: 0.0127};
    var RyR_max: dimensionless {init: 0.02};
    var K_05RyR: dimensionless {init: 0.682891};
    var nRyR: dimensionless {init: 9.773};
    koCa = sel
      case ANS > 0{dimensionless}:
        koCa_max*(RyR_min-RyR_max*pow(PKA, nRyR)/(pow(K_05RyR, nRyR)+pow(PKA, nRyR))+1{dimensionless});
      otherwise:
        10000{dimensionless};
    endsel;
    j_SRCarel = ks*O*(Ca_jsr-Ca_sub);
    diff = Ca_jsr-Ca_sub;
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(EC50_SR/Ca_jsr, HSR));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    ode(R, time) = kim*RI-kiSRCa*Ca_sub*R-(koSRCa*sqr(Ca_sub)*R-kom*O);
    ode(O, time) = koSRCa*sqr(Ca_sub)*R-kom*O-(kiSRCa*Ca_sub*O-kim*I);
    ode(I, time) = kiSRCa*Ca_sub*O-kim*I-(kom*I-koSRCa*sqr(Ca_sub)*RI);
    ode(RI, time) = kom*I-koSRCa*sqr(Ca_sub)*RI-(kim*RI-kiSRCa*Ca_sub*R);
    P_tot = R+O+I+RI;
  enddef;

  def comp Ca_intracellular_fluxes as
    var j_Ca_dif: millimolar_per_second {pub: out};
    var j_up: millimolar_per_second {pub: out};
    var j_tr: millimolar_per_second {pub: out};
    var tau_dif_Ca: second {init: 5.469e-5};
    var tau_tr: second {init: 0.04};
    var P_up: millimolar_per_second;
    var P_up_basal: millimolar_per_second {init: 5};
    var b_up: dimensionless;
    var ACh: nanomolar {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var K_up: millimolar {init: 0.000286113};
    var Ca_nsr: millimolar {pub: in};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    var slope_up: millimolar {init: 5e-5};
    var ANS: dimensionless {pub: in};
    var PLBp: dimensionless {pub: in};
    var F_PLBp: dimensionless;
    b_up = sel
      case Iso_1_uM > 0{dimensionless}:
        -0.25{dimensionless};
      case ACh > 0{nanomolar}:
        0.7{dimensionless}*1e-6{dimensionless}*ACh/(1e-6{dimensionless}*ACh+0.00009{nanomolar});
      otherwise:
        0{dimensionless};
    endsel;
    P_up = P_up_basal*(1{dimensionless}-b_up);
    j_Ca_dif = (Ca_sub-Cai)/tau_dif_Ca;
    j_tr = (Ca_nsr-Ca_jsr)/tau_tr;
    F_PLBp = sel
      case PLBp > 0.23{dimensionless}:
        3.3931{dimensionless}*pow(PLBp, 4.0695{dimensionless})/(pow(0.2805{dimensionless}, 4.0695{dimensionless})+pow(PLBp, 4.0695{dimensionless}));
      otherwise:
        1.698{dimensionless}*pow(PLBp, 13.5842{dimensionless})/(pow(0.2240{dimensionless}, 13.5842{dimensionless})+pow(PLBp, 13.5842{dimensionless}));
    endsel;
    j_up = sel
      case ANS > 0{dimensionless}:
        0.9{dimensionless}*P_up*F_PLBp/(1{dimensionless}+exp((-Cai+K_up)/slope_up));
      otherwise:
        P_up/(1{dimensionless}+exp((-Cai+K_up)/slope_up));
    endsel;
  enddef;

  def comp Ca_buffering as
    var TC_tot: millimolar {init: 0.031, pub: out};
    var TMC_tot: millimolar {init: 0.062, pub: out};
    var CM_tot: millimolar {init: 0.045, pub: out};
    var CQ_tot: millimolar {init: 10, pub: out};
    var delta_fTC: per_second {pub: out};
    var delta_fTMC: per_second {pub: out};
    var delta_fCMs: per_second {pub: out};
    var delta_fCMi: per_second {pub: out};
    var delta_fCQ: per_second {pub: out};
    var delta_fTMM: per_second;
    var fTMM: dimensionless {init: 0.653777};
    var fCMi: dimensionless {init: 0.217311, pub: out};
    var fCMs: dimensionless {init: 0.158521};
    var fTC: dimensionless {init: 0.017929};
    var fTMC: dimensionless {init: 0.259947};
    var fCQ: dimensionless {init: 0.138975};
    var kf_TC: per_millimolar_second {init: 88800};
    var kf_TMM: per_millimolar_second {init: 2277};
    var kf_TMC: per_millimolar_second {init: 227700};
    var kf_CM: per_millimolar_second {init: 1.642e6, pub: out};
    var kf_CQ: per_millimolar_second {init: 175.4};
    var kb_TC: per_second {init: 446};
    var kb_TMC: per_second {init: 7.51};
    var kb_TMM: per_second {init: 751};
    var kb_CM: per_second {init: 542, pub: out};
    var kb_CQ: per_second {init: 445};
    var time: second {pub: in};
    var Mgi: millimolar {init: 2.5};
    var Cai: millimolar {pub: in};
    var Ca_sub: millimolar {pub: in};
    var Ca_jsr: millimolar {pub: in};
    ode(fTC, time) = delta_fTC;
    delta_fTC = kf_TC*Cai*(1{dimensionless}-fTC)-kb_TC*fTC;
    ode(fTMC, time) = delta_fTMC;
    delta_fTMC = kf_TMC*Cai*(1{dimensionless}-(fTMC+fTMM))-kb_TMC*fTMC;
    ode(fTMM, time) = delta_fTMM;
    delta_fTMM = kf_TMM*Mgi*(1{dimensionless}-(fTMC+fTMM))-kb_TMM*fTMM;
    ode(fCMi, time) = delta_fCMi;
    delta_fCMi = kf_CM*Cai*(1{dimensionless}-fCMi)-kb_CM*fCMi;
    ode(fCMs, time) = delta_fCMs;
    delta_fCMs = kf_CM*Ca_sub*(1{dimensionless}-fCMs)-kb_CM*fCMs;
    ode(fCQ, time) = delta_fCQ;
    delta_fCQ = kf_CQ*Ca_jsr*(1{dimensionless}-fCQ)-kb_CQ*fCQ;
  enddef;

  def comp Ca_dynamics as
    var Cai: millimolar {init: 9.15641e-6, pub: out};
    var Ca_nsr: millimolar {init: 0.435148, pub: out};
    var Ca_jsr: millimolar {init: 0.409551, pub: out};
    var Ca_sub: millimolar {init: 6.226104e-5, pub: out};
    var V_i: millimetre3 {pub: in};
    var V_jsr: millimetre3 {pub: in};
    var V_nsr: millimetre3 {pub: in};
    var V_sub: millimetre3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_siCa: nanoA {pub: in};
    var i_CaT: nanoA {pub: in};
    var i_NaCa: nanoA {pub: in};
    var j_SRCarel: millimolar_per_second {pub: in};
    var j_Ca_dif: millimolar_per_second {pub: in};
    var j_tr: millimolar_per_second {pub: in};
    var j_up: millimolar_per_second {pub: in};
    var TMC_tot: millimolar {pub: in};
    var CM_tot: millimolar {pub: in};
    var TC_tot: millimolar {pub: in};
    var CQ_tot: millimolar {pub: in};
    var delta_fTMC: per_second {pub: in};
    var delta_fCMi: per_second {pub: in};
    var delta_fCMs: per_second {pub: in};
    var delta_fTC: per_second {pub: in};
    var delta_fCQ: per_second {pub: in};
    ode(Cai, time) = 1{dimensionless}*(j_Ca_dif*V_sub-j_up*V_nsr)/V_i-(CM_tot*delta_fCMi+TC_tot*delta_fTC+TMC_tot*delta_fTMC);
    ode(Ca_sub, time) = j_SRCarel*V_jsr/V_sub-((i_siCa+i_CaT-2{dimensionless}*i_NaCa)/(2{dimensionless}*F*V_sub)+j_Ca_dif+CM_tot*delta_fCMs);
    ode(Ca_nsr, time) = j_up-j_tr*V_jsr/V_nsr;
    ode(Ca_jsr, time) = j_tr-(j_SRCarel+CQ_tot*delta_fCQ);
  enddef;

  def comp Cell_parameters as
    var V_sub: millimetre3 {pub: out};
    var V_jsr: millimetre3 {pub: out};
    var V_nsr: millimetre3 {pub: out};
    var V_i: millimetre3 {pub: out};
    var V_cell: millimetre3;
    var V_jsr_part: dimensionless {init: 0.0012};
    var V_i_part: dimensionless {init: 0.46};
    var V_nsr_part: dimensionless {init: 0.0116};
    var R_cell: micrometre {init: 3.9};
    var L_cell: micrometre {init: 67};
    var L_sub: micrometre {init: 0.02};
    V_cell = 0.000000001{micrometre_per_femtometre}*pi*sqr(R_cell)*L_cell;
    V_sub = 0.000000001{micrometre_per_femtometre}*2{dimensionless}*pi*L_sub*(R_cell-L_sub/2{dimensionless})*L_cell;
    V_jsr = V_jsr_part*V_cell;
    V_i = V_i_part*V_cell-V_sub;
    V_nsr = V_nsr_part*V_cell;
  enddef;

  def comp i_Kur as
    var i_Kur: nanoA {pub: out};
    var g_Kur: microS {init: 0.1539e-3};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var r_Kur: dimensionless {priv: in};
    var s_Kur: dimensionless {priv: in};
    i_Kur = g_Kur*r_Kur*s_Kur*(V-E_K);
  enddef;

  def comp i_Kur_rKur_gate as
    var r_Kur: dimensionless {init: 0.011845, pub: out};
    var tau_r_Kur: second;
    var r_Kur_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r_Kur, time) = (r_Kur_infinity-r_Kur)/tau_r_Kur;
    r_Kur_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+6{millivolt})/(-8.6{millivolt})));
    tau_r_Kur = 0.009{second}/(1{dimensionless}+exp((V+5{millivolt})/12{millivolt}))+0.0005{second};
  enddef;

  def comp i_Kur_sKur_gate as
    var s_Kur: dimensionless {init: 0.845304, pub: out};
    var tau_s_Kur: second;
    var s_Kur_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(s_Kur, time) = (s_Kur_infinity-s_Kur)/tau_s_Kur;
    s_Kur_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+7.5{millivolt})/10{millivolt}));
    tau_s_Kur = 0.59{second}/(1{dimensionless}+exp((V+60{millivolt})/10{millivolt}))+3.05{second};
  enddef;

  def comp i_to as
    var i_to: nanoA {pub: out};
    var g_to: microS {init: 3.5e-3};
    var E_K: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var q: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(V-E_K)*q*r;
  enddef;

  def comp i_to_q_gate as
    var q: dimensionless {init: 0.430836, pub: out};
    var q_infinity: dimensionless;
    var tau_q: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    q_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+49{millivolt})/13{millivolt}));
    tau_q = 0.001{dimensionless}*0.6{dimensionless}*(65.17{dimensionless}/(0.57{per_second}*exp(-0.08{per_millivolt}*(V+44{millivolt}))+0.065{per_second}*exp(0.1{per_millivolt}*(V+45.93{millivolt})))+10.1{second});
    ode(q, time) = (q_infinity-q)/tau_q;
  enddef;

  def comp i_to_r_gate as
    var r: dimensionless {init: 0.014523, pub: out};
    var r_infinity: dimensionless;
    var tau_r: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-19.3{millivolt})/15{millivolt}));
    tau_r = 0.001{dimensionless}*0.66{dimensionless}*1.4{dimensionless}*(15.59{second}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(V+23.84{millivolt})))+2.98{second});
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  def comp i_Kr as
    var i_Kr: nanoA {pub: out};
    var g_Kr: microS {init: 0.00424};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var E_K: millivolt {pub: in};
    var Ko: millimolar {pub: in};
    var paS: dimensionless {priv: in};
    var paF: dimensionless {priv: in};
    var piy: dimensionless {priv: in};
    var RTONF: millivolt {pub: in};
    i_Kr = g_Kr*(V-E_K)*(0.9{dimensionless}*paF+0.1{dimensionless}*paS)*piy;
  enddef;

  def comp i_Kr_pa_gate as
    var paS: dimensionless {init: 0.283185, pub: out};
    var paF: dimensionless {init: 0.011068, pub: out};
    var pa_infinity: dimensionless;
    var alfapaF: per_second;
    var betapaF: per_second;
    var tau_paS: second;
    var tau_paF: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alfapaF = 1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/6.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/11.9{millivolt})+0.96{dimensionless}*exp(-V/18.5{millivolt})));
    betapaF = 4{dimensionless}*((37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))/0.84655354{second}-1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/10.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))));
    pa_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+10.0144{millivolt})/7.6607{millivolt}));
    tau_paS = 0.84655354{second}/(4.2{dimensionless}*exp(V/17{millivolt})+0.15{dimensionless}*exp(-V/21.6{millivolt}));
    tau_paF = 1{second}/(30{dimensionless}*exp(V/10{millivolt})+exp(-V/12{millivolt}));
    ode(paS, time) = (pa_infinity-paS)/tau_paS;
    ode(paF, time) = (pa_infinity-paF)/tau_paF;
  enddef;

  def comp i_Kr_pi_gate as
    var piy: dimensionless {init: 0.709051, pub: out};
    var pi_infinity: dimensionless;
    var tau_pi: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    tau_pi = 1{second}/(100{dimensionless}*exp(-V/54.645{millivolt})+656{dimensionless}*exp(V/106.157{millivolt}));
    pi_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.6{millivolt})/17.1{millivolt}));
    ode(piy, time) = (pi_infinity-piy)/tau_pi;
  enddef;

  def comp i_Ks as
    var i_Ks: nanoA {pub: out};
    var g_Ks: microS {pub: out};
    var g_Ks_: microS {init: 0.00065};
    var E_Ks: millivolt;
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nai: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var RTONF: millivolt {pub: in};
    var n: dimensionless {priv: in};
    var Iso_1_uM: dimensionless {priv: out, pub: in};
    var ANS: dimensionless {priv: out, pub: in};
    var VW_IKs: dimensionless {init: 0, priv: out};
    var PKA: dimensionless {priv: out, pub: in};
    var ANS_cond_i_Ks: dimensionless;
    g_Ks = sel
      case Iso_1_uM > 0{dimensionless}:
        1.2{dimensionless}*g_Ks_;
      otherwise:
        g_Ks_;
    endsel;
    ANS_cond_i_Ks = sel
      case (ANS > 0{dimensionless}) and (VW_IKs == 0{dimensionless}):
        -0.2152{dimensionless}+0.435692{dimensionless}*pow(PKA, 10.0808{dimensionless})/(pow(0.719701{dimensionless}, 10.0808{dimensionless})+pow(PKA, 10.0808{dimensionless}));
      case (ANS > 0{dimensionless}) and (VW_IKs > 0{dimensionless}):
        -0.2152{dimensionless}+0.494259{dimensionless}*pow(PKA, 10.0808{dimensionless})/(pow(0.736717{dimensionless}, 10.0808{dimensionless})+pow(PKA, 10.0808{dimensionless}));
      otherwise:
        0{millivolt};
    endsel;
    E_Ks = RTONF*ln((Ko+0.12{dimensionless}*Nao)/(Ki+0.12{dimensionless}*Nai));
    i_Ks = g_Ks*(1{dimensionless}+ANS_cond_i_Ks)*(V-E_Ks)*sqr(n);
  enddef;

  def comp i_Ks_n_gate as
    var n: dimensionless {init: 0.1162, pub: out};
    var n_infinity: dimensionless;
    var tau_n: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var ANS: dimensionless {pub: in};
    var VW_IKs: dimensionless {pub: in};
    var PKA: dimensionless {pub: in};
    var Iso_shift: millivolt;
    var ANS_shift_i_Ks_n_gate: millivolt;
    var K_i_Ks2: millivolt {init: 34.2549};
    var K_05i_Ks2: dimensionless {init: 0.6955};
    var alpha_n: per_second;
    var beta_n: per_second;
    Iso_shift = sel
      case Iso_1_uM > 0{dimensionless}:
        -14{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    ANS_shift_i_Ks_n_gate = sel
      case (ANS > 0{dimensionless}) and (VW_IKs == 0{dimensionless}):
        -(24.4{dimensionless}*1.411375{dimensionless}*pow(PKA, 9.281{dimensionless})/(pow(0.704217{dimensionless}, 9.281{dimensionless})+pow(PKA, 9.281{dimensionless}))-18.76{dimensionless});
      case (ANS > 0{dimensionless}) and (VW_IKs > 0{dimensionless}):
        -(24.4{dimensionless}*1.438835{dimensionless}*pow(PKA, 9.281{dimensionless})/(pow(0.707399{dimensionless}, 9.281{dimensionless})+pow(PKA, 9.281{dimensionless}))-18.76{dimensionless});
      otherwise:
        0{millivolt};
    endsel;
    n_infinity = sqrt(1{dimensionless}/(1{dimensionless}+exp(-(V+0.6383{millivolt}-Iso_shift-ANS_shift_i_Ks_n_gate)/10.7071{millivolt})));
    tau_n = 1{dimensionless}/(alpha_n+beta_n);
    alpha_n = 28{per_second}/(1{dimensionless}+exp(-(V-40{millivolt}-Iso_shift-ANS_shift_i_Ks_n_gate)/3{millivolt}));
    beta_n = 1{per_second}*exp(-(V-Iso_shift-ANS_shift_i_Ks_n_gate-5{millivolt})/25{millivolt});
    ode(n, time) = (n_infinity-n)/tau_n;
  enddef;

  def comp i_KACh as
    var ANS: dimensionless {priv: out, pub: in};
    var ACh: nanomolar {priv: out, pub: in};
    var ACh_cas: nanomolar {priv: out, pub: in};
    var i_KACh: nanoA {pub: out};
    var g_KACh: microS {init: 0.00345};
    var K_g_ACh_max: dimensionless {init: 1.29637};
    var E_K: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var a: dimensionless {priv: in};
    var ACh_on: dimensionless {init: 1};
    i_KACh = sel
      case (ANS > 0{dimensionless}) and (ACh_cas > 0{nanomolar}):
        K_g_ACh_max*g_KACh*(V-E_K)*a;
      case ACh > 0{nanomolar}:
        ACh_on*g_KACh*(V-E_K)*(1{dimensionless}+exp((V+20{millivolt})/20{millivolt}))*a;
      otherwise:
        0{nanoA};
    endsel;
  enddef;

  def comp i_KACh_a_gate as
    var a: dimensionless {init: 0.00277, pub: out};
    var alpha_a: per_second;
    var beta_a: per_second;
    var a_infinity: dimensionless;
    var tau_a: second;
    var ANS: dimensionless {pub: in};
    var ACh: nanomolar {pub: in};
    var ACh_cas: nanomolar {pub: in};
    var K_alpha: dimensionless {init: 1.19683};
    var K_alpha_add: dimensionless {init: 139.301};
    var K_alpha_div: dimensionless {init: 0.00568561};
    var K_beta: dimensionless {init: 16.2494};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_a = sel
      case ANS > 0{dimensionless}:
        K_alpha*0.001{dimensionless}*12.32{per_second}/(K_alpha_add+K_alpha_div/(ACh_cas*1e-6{per_nanomolar}));
      otherwise:
        (3.5988{per_second}-0.025641{per_second})/(1{dimensionless}+0.0000012155{dimensionless}/pow(1e-6{per_nanomolar}*ACh, 1.6951{dimensionless}))+0.025641{per_second};
    endsel;
    beta_a = sel
      case ANS > 0{dimensionless}:
        0.001{per_second}*K_beta*exp(0.0133{per_millivolt}*(V+40{millivolt}));
      otherwise:
        10{per_second}*exp(0.0133{per_millivolt}*(V+40{millivolt}));
    endsel;
    a_infinity = alpha_a/(alpha_a+beta_a);
    tau_a = 1{dimensionless}/(alpha_a+beta_a);
    ode(a, time) = (a_infinity-a)/tau_a;
  enddef;

  def comp cAMP as
    var cAMP: millimolar {init: 0.032883333, pub: out};
    var time: second {pub: in};
    var diff_cAMP: millimolar_per_second;
    var Iso_cas: nanomolar {pub: in};
    var ACh_cas: nanomolar {pub: in};
    var ATPi: millimolar {pub: in};
    var kiso: per_millisecond;
    var K_iso: dimensionless {init: 0.007};
    var K_05iso: nanomolar {init: 58.57114132};
    var niso: dimensionless {init: 0.9264};
    var kach: per_minute;
    var K_ach: dimensionless {init: 1.37475};
    var K_05ach: nanomolar {init: 43.4557};
    var nach: dimensionless {init: 0.948264};
    var k1: per_minute;
    var kb_CM: per_second {pub: in};
    var fCMi: dimensionless {pub: in};
    var kf_CM: per_millimolar_second {pub: in};
    var K_k1: dimensionless {init: 4.64625};
    var K_ACI: per_minute {init: 0.016};
    var K_AC: per_minute {init: 0.0735};
    var K_Ca: millimolar {init: 0.000563995};
    var K_ACCa: millimolar {init: 0.000024};
    var k2: per_minute;
    var k3: per_minute;
    var kPKA: per_minute {init: 15};
    var nPKA: dimensionless {init: 5};
    var kPKA_cAMP: millimolar {init: 0.47416667};
    ode(cAMP, time) = diff_cAMP;
    diff_cAMP = ((kiso-kach)*ATPi+k1*ATPi-k2*cAMP-k3*cAMP)/60{dimensionless};
    kiso = K_iso+0.1181{dimensionless}*pow(Iso_cas, niso)/(pow(K_05iso, niso)+pow(Iso_cas, niso));
    kach = K_ach*0.0146{dimensionless}*pow(ACh_cas, nach)/(pow(K_05ach, nach)+pow(ACh_cas, nach));
    k1 = K_k1*(K_ACI+K_AC/(1{dimensionless}+exp((K_Ca-kb_CM*fCMi/(kf_CM*(1{dimensionless}-fCMi)))/K_ACCa)));
    k2 = 1.1{dimensionless}*237.9851{dimensionless}*pow(cAMP*600{dimensionless}, 5.101{dimensionless})/(pow(20.1077{dimensionless}, 6.101{dimensionless})+pow(cAMP*600{dimensionless}, 6.101{dimensionless}));
    k3 = kPKA*pow(cAMP, nPKA-1{dimensionless})/(pow(kPKA_cAMP, nPKA)+pow(cAMP, nPKA));
  enddef;

  def comp PLBp as
    var PLBp: dimensionless {init: 0.23, pub: out};
    var time: second {pub: in};
    var diff_PLBp: per_second;
    var k4: per_minute;
    var PKA: dimensionless {pub: in};
    var kPLBp: per_minute {init: 52.25};
    var nPLB: dimensionless {init: 1};
    var kPKA_PLB: dimensionless {init: 1.610336};
    var k5: per_minute;
    var kPP1: per_millimolar_minute {init: 23575};
    var PP1: millimolar {init: 0.00089};
    var kPP1_PLB: dimensionless {init: 0.07457};
    ode(PLBp, time) = diff_PLBp;
    diff_PLBp = (k4-k5)/60{dimensionless};
    k4 = kPLBp*pow(PKA, nPLB)/(pow(kPKA_PLB, nPLB)+pow(PKA, nPLB));
    k5 = kPP1*PP1*PLBp/(kPP1_PLB+PLBp);
  enddef;

  def comp PKA as
    var PKA: dimensionless {pub: out};
    var cAMP: millimolar {pub: in};
    PKA = sel
      case cAMP*600{dimensionless} < 25.87{dimensionless}:
        -0.9483029{dimensionless}*exp(-cAMP*600{dimensionless}*0.06561479{dimensionless})+0.97781646{dimensionless};
      otherwise:
        -0.45260509{dimensionless}*exp(-cAMP*600{dimensionless}*0.03395094{dimensionless})+0.99221714{dimensionless};
    endsel;
  enddef;

  def comp ATPi as
    var ATPi: millimolar {pub: out};
    var cAMP: millimolar {pub: in};
    var ATPi_max: millimolar {init: 2.533};
    var kATP: dimensionless {init: 6142};
    var cAMPb: millimolar {init: 0.033333333};
    var nATP: dimensionless {init: 3.36};
    var kATP05: dimensionless {init: 6724};
    var KATP_min: dimensionless {init: 6034};
    ATPi = ATPi_max*(kATP*pow(cAMP*100{dimensionless}/cAMPb, nATP)/(kATP05+pow(cAMP*100{dimensionless}/cAMPb, nATP))-KATP_min)/100{dimensionless};
  enddef;

  def group as containment for
    comp Membrane incl
      comp Ionic_values;
      comp Voltage_clamp;
      comp i_NaK;
      comp i_NaCa;
      comp Ca_SR_release;
      comp Ca_intracellular_fluxes;
      comp Ca_buffering;
      comp Ca_dynamics;
      comp Cell_parameters;
      comp Nai_concentration;
      comp Rate_modulation_experiments;
      comp i_f incl
        comp i_f_y_gate;
      endcomp;
      comp i_Na incl
        comp i_Na_m_gate;
        comp i_Na_h_gate;
      endcomp;
      comp i_Kur incl
        comp i_Kur_rKur_gate;
        comp i_Kur_sKur_gate;
      endcomp;
      comp i_CaL incl
        comp i_CaL_dL_gate;
        comp i_CaL_fL_gate;
        comp i_CaL_fCa_gate;
      endcomp;
      comp i_CaT incl
        comp i_CaT_dT_gate;
        comp i_CaT_fT_gate;
      endcomp;
      comp i_to incl
        comp i_to_q_gate;
        comp i_to_r_gate;
      endcomp;
      comp i_Kr incl
        comp i_Kr_pa_gate;
        comp i_Kr_pi_gate;
      endcomp;
      comp i_Ks incl
        comp i_Ks_n_gate;
      endcomp;
      comp i_KACh incl
        comp i_KACh_a_gate;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp Membrane incl
      comp Voltage_clamp;
    endcomp;
    comp i_f incl
      comp i_f_y_gate;
    endcomp;
    comp i_Na incl
      comp i_Na_m_gate;
      comp i_Na_h_gate;
    endcomp;
    comp i_Kur incl
      comp i_Kur_rKur_gate;
      comp i_Kur_sKur_gate;
    endcomp;
    comp i_CaL incl
      comp i_CaL_dL_gate;
      comp i_CaL_fL_gate;
      comp i_CaL_fCa_gate;
    endcomp;
    comp i_CaT incl
      comp i_CaT_dT_gate;
      comp i_CaT_fT_gate;
    endcomp;
    comp i_to incl
      comp i_to_q_gate;
      comp i_to_r_gate;
    endcomp;
    comp i_Kr incl
      comp i_Kr_pa_gate;
      comp i_Kr_pi_gate;
    endcomp;
    comp i_Ks incl
      comp i_Ks_n_gate;
    endcomp;
    comp i_KACh incl
      comp i_KACh_a_gate;
    endcomp;
  enddef;
  def map between Membrane and Voltage_clamp for
    vars V_clamp and V_clamp;
    vars time and time;
  enddef;
  def map between Membrane and Ionic_values for
    vars RTONF and RTONF;
  enddef;
  def map between Membrane and environment for
    vars time and time;
  enddef;
  def map between Nai_concentration and environment for
    vars time and time;
  enddef;
  def map between i_f and environment for
    vars time and time;
  enddef;
  def map between i_Kur and environment for
    vars time and time;
  enddef;
  def map between i_NaK and environment for
    vars time and time;
  enddef;
  def map between i_NaCa and environment for
    vars time and time;
  enddef;
  def map between i_Na and environment for
    vars time and time;
  enddef;
  def map between i_CaL and environment for
    vars time and time;
  enddef;
  def map between i_CaT and environment for
    vars time and time;
  enddef;
  def map between Ca_SR_release and environment for
    vars time and time;
  enddef;
  def map between Ca_buffering and environment for
    vars time and time;
  enddef;
  def map between Ca_dynamics and environment for
    vars time and time;
  enddef;
  def map between i_to and environment for
    vars time and time;
  enddef;
  def map between i_Kr and environment for
    vars time and time;
  enddef;
  def map between i_Ks and environment for
    vars time and time;
  enddef;
  def map between i_KACh and environment for
    vars time and time;
  enddef;
  def map between cAMP and environment for
    vars time and time;
  enddef;
  def map between PLBp and environment for
    vars time and time;
  enddef;
  def map between Nai_concentration and Membrane for
    vars F and F;
  enddef;
  def map between i_f and Membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_f and i_f;
  enddef;
  def map between i_NaK and Membrane for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between i_Kur and Membrane for
    vars V and V;
    vars i_Kur and i_Kur;
  enddef;
  def map between i_NaCa and Membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars RTONF and RTONF;
  enddef;
  def map between i_Na and Membrane for
    vars V and V;
    vars i_Na and i_Na;
    vars RTONF and RTONF;
  enddef;
  def map between i_CaL and Membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_CaL and i_CaL;
  enddef;
  def map between i_CaT and Membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_CaT and i_CaT;
  enddef;
  def map between Ca_dynamics and Membrane for
    vars F and F;
  enddef;
  def map between i_to and Membrane for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between i_Kr and Membrane for
    vars V and V;
    vars i_Kr and i_Kr;
    vars RTONF and RTONF;
  enddef;
  def map between i_Ks and Membrane for
    vars V and V;
    vars RTONF and RTONF;
    vars i_Ks and i_Ks;
  enddef;
  def map between i_KACh and Membrane for
    vars V and V;
    vars i_KACh and i_KACh;
  enddef;
  def map between Nai_concentration and Ionic_values for
    vars Nai and Nai;
  enddef;
  def map between i_f and Ionic_values for
    vars E_Na and E_Na;
    vars E_K and E_K;
    vars Ko and Ko;
  enddef;
  def map between i_Kur and Ionic_values for
    vars E_K and E_K;
  enddef;
  def map between i_Na and Ionic_values for
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between i_NaK and Ionic_values for
    vars Ko and Ko;
    vars E_Na and E_Na;
  enddef;
  def map between i_NaCa and Ionic_values for
    vars Nao and Nao;
    vars Cao and Cao;
  enddef;
  def map between Ca_dynamics and Ionic_values for
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_CaL and Ionic_values for
    vars Cao and Cao;
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between i_CaT and Ionic_values for
    vars Cao and Cao;
  enddef;
  def map between i_to and Ionic_values for
    vars E_K and E_K;
  enddef;
  def map between i_Kr and Ionic_values for
    vars Ko and Ko;
    vars E_K and E_K;
  enddef;
  def map between i_Ks and Ionic_values for
    vars Nao and Nao;
    vars Ko and Ko;
    vars Ki and Ki;
  enddef;
  def map between i_KACh and Ionic_values for
    vars E_K and E_K;
  enddef;
  def map between i_f and i_f_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
    vars ANS and ANS;
    vars cAMP and cAMP;
  enddef;
  def map between i_f and cAMP for
    vars cAMP and cAMP;
  enddef;
  def map between i_Na and i_Na_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Na and i_Na_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Kur and i_Kur_rKur_gate for
    vars r_Kur and r_Kur;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Kur and i_Kur_sKur_gate for
    vars s_Kur and s_Kur;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_CaL and i_CaL_dL_gate for
    vars dL and dL;
    vars time and time;
    vars V and V;
    vars Iso_1_uM and Iso_1_uM;
    vars ANS and ANS;
    vars PKA and PKA;
  enddef;
  def map between i_CaL and i_CaL_fL_gate for
    vars fL and fL;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_CaL and i_CaL_fCa_gate for
    vars fCa and fCa;
    vars time and time;
    vars V and V;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_CaL and PKA for
    vars PKA and PKA;
  enddef;
  def map between i_CaT and i_CaT_dT_gate for
    vars dT and dT;
    vars V and V;
    vars time and time;
  enddef;
  def map between i_CaT and i_CaT_fT_gate for
    vars fT and fT;
    vars V and V;
    vars time and time;
  enddef;
  def map between i_to and i_to_q_gate for
    vars q and q;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_to and i_to_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Kr and i_Kr_pa_gate for
    vars paF and paF;
    vars paS and paS;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Kr and i_Kr_pi_gate for
    vars piy and piy;
    vars time and time;
    vars V and V;
  enddef;
  def map between i_Ks and i_Ks_n_gate for
    vars n and n;
    vars time and time;
    vars V and V;
    vars Iso_1_uM and Iso_1_uM;
    vars ANS and ANS;
    vars PKA and PKA;
    vars VW_IKs and VW_IKs;
  enddef;
  def map between i_Ks and PKA for
    vars PKA and PKA;
  enddef;
  def map between i_NaK and PKA for
    vars PKA and PKA;
  enddef;
  def map between i_KACh and i_KACh_a_gate for
    vars a and a;
    vars time and time;
    vars V and V;
    vars ANS and ANS;
    vars ACh and ACh;
    vars ACh_cas and ACh_cas;
  enddef;
  def map between cAMP and ATPi for
    vars ATPi and ATPi;
    vars cAMP and cAMP;
  enddef;
  def map between cAMP and Ca_buffering for
    vars kb_CM and kb_CM;
    vars kf_CM and kf_CM;
    vars fCMi and fCMi;
  enddef;
  def map between PKA and cAMP for
    vars cAMP and cAMP;
  enddef;
  def map between PLBp and PKA for
    vars PKA and PKA;
  enddef;
  def map between Nai_concentration and i_Ks for
    vars Nai and Nai;
  enddef;
  def map between Ca_dynamics and Cell_parameters for
    vars V_i and V_i;
    vars V_jsr and V_jsr;
    vars V_nsr and V_nsr;
    vars V_sub and V_sub;
  enddef;
  def map between Ca_dynamics and Ca_buffering for
    vars TMC_tot and TMC_tot;
    vars CM_tot and CM_tot;
    vars TC_tot and TC_tot;
    vars CQ_tot and CQ_tot;
    vars delta_fTMC and delta_fTMC;
    vars delta_fCMi and delta_fCMi;
    vars delta_fCMs and delta_fCMs;
    vars delta_fTC and delta_fTC;
    vars delta_fCQ and delta_fCQ;
    vars Cai and Cai;
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
  enddef;
  def map between i_NaCa and Ca_dynamics for
    vars i_NaCa and i_NaCa;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Ca_SR_release and Ca_dynamics for
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
    vars j_SRCarel and j_SRCarel;
  enddef;
  def map between Ca_SR_release and PKA for
    vars PKA and PKA;
  enddef;
  def map between Ca_intracellular_fluxes and Ca_dynamics for
    vars Cai and Cai;
    vars Ca_nsr and Ca_nsr;
    vars Ca_sub and Ca_sub;
    vars Ca_jsr and Ca_jsr;
    vars j_Ca_dif and j_Ca_dif;
    vars j_tr and j_tr;
    vars j_up and j_up;
  enddef;
  def map between Ca_intracellular_fluxes and PLBp for
    vars PLBp and PLBp;
  enddef;
  def map between i_CaL and Ca_dynamics for
    vars i_siCa and i_siCa;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between i_CaT and Ca_dynamics for
    vars i_CaT and i_CaT;
    vars Ca_sub and Ca_sub;
  enddef;
  def map between Nai_concentration and Cell_parameters for
    vars V_i and V_i;
    vars V_sub and V_sub;
  enddef;
  def map between Nai_concentration and i_f for
    vars i_fNa and i_fNa;
  enddef;
  def map between Nai_concentration and i_NaK for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
  def map between Nai_concentration and i_NaCa for
    vars Nai and Nai;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Nai_concentration and i_Na for
    vars Nai and Nai;
    vars i_Na and i_Na;
  enddef;
  def map between Nai_concentration and i_CaL for
    vars Nai and Nai;
    vars i_siNa and i_siNa;
  enddef;
  def map between i_f and Rate_modulation_experiments for
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
    vars ANS and ANS;
  enddef;
  def map between i_CaL and Rate_modulation_experiments for
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
    vars ANS and ANS;
  enddef;
  def map between i_NaK and Rate_modulation_experiments for
    vars Iso_1_uM and Iso_1_uM;
    vars ANS and ANS;
  enddef;
  def map between i_Ks and Rate_modulation_experiments for
    vars Iso_1_uM and Iso_1_uM;
    vars ANS and ANS;
  enddef;
  def map between i_KACh and Rate_modulation_experiments for
    vars ANS and ANS;
    vars ACh and ACh;
    vars ACh_cas and ACh_cas;
  enddef;
  def map between Ca_intracellular_fluxes and Rate_modulation_experiments for
    vars ACh and ACh;
    vars Iso_1_uM and Iso_1_uM;
    vars ANS and ANS;
  enddef;
  def map between Ca_SR_release and Rate_modulation_experiments for
    vars ANS and ANS;
  enddef;
  def map between cAMP and Rate_modulation_experiments for
    vars Iso_cas and Iso_cas;
    vars ACh_cas and ACh_cas;
  enddef;
enddef;
